
//  ******************************************************
//
//     File generated by: neuroConstruct v1.6.0
//
//     Generally replicates hoc for Cell Type as exported from
//     NEURON's Cell Builder, together with some neuroConstruct
//     specific helper/info procedures, e.g. toString(), netInfo()
//
//  ******************************************************


begintemplate SomaOnly_origChans_all

public init, topol, basic_shape, subsets, geom, memb
public synlist, x, y, z, position, connect2target


//  Some fields for referencing the cells

public reference, type, description, name
strdef reference, type, description, name


//  Some methods for referencing the cells

public toString, netInfo

public all

objref synlist
objref all
objref stringFuncs

public soma_group
objref soma_group

proc init() {
    topol()
    subsets()
    geom()
    biophys()
    geom_nseg()
    synlist = new List()
    x = y = z = 0
    reference = $s1
    type = $s2
    description = $s3
    
    strdef indexNum
    stringFuncs = new StringFunctions()
    stringFuncs.tail(reference, "_", indexNum)
    while (stringFuncs.substr( indexNum, "_")>=0) {
        stringFuncs.tail(indexNum, "_", indexNum)
    }
    
    sprint(name, "%s", type)
}

create Soma
public Soma

proc topol() {
    basic_shape()
}

proc basic_shape() {

//  Looking at segment number 0: Soma, section: Soma, SPHERICAL, ID: 0, ROOT SEGMENT, rad: 14.9, (0.0, 0.0, 0.0) -> (0.0, 0.0, 0.0) (FINITE VOLUME)
    Soma {pt3dclear() pt3dadd(0.0, -14.9, 0.0, 29.8) pt3dadd(0.0, 14.9, 0.0, 29.8)}
}

proc subsets() { local i


//  The group all is assumed never to change
    all = new SectionList()


    soma_group = new SectionList()

    Soma soma_group.append()


    Soma all.append()
}

proc geom() {
}

proc biophys() {
    forsec all cm = 1.64
    forsec all Ra = 250.0

    forsec all { 
//      Assuming parameters other than max cond dens are set in the mod file...

        insert CaT  { gmax_CaT = 5.0E-4 }  
//      Ion ca is used in this mechanism...

        eca = 137.52625  // note: this is val from ChannelML, may be reset later

    }

    forsec all { 
//      Assuming parameters other than max cond dens are set in the mod file...

        insert NaP_nmodl  { gmax_NaP_nmodl = 0.001 }  
    }

    forsec all { 
//      Assuming parameters other than max cond dens are set in the mod file...

        insert KMnew2_nmodl  { gmax_KMnew2_nmodl = 4.0E-5 }  
    }

    forsec all { 
//      Assuming parameters other than max cond dens are set in the mod file...

        insert KC_nmodl  { gmax_KC_nmodl = 0.08 }  
    }

    forsec all { 
//      Assuming parameters other than max cond dens are set in the mod file...

        insert cad_nmodl_altered  {  }  
    }

    forsec all { 
//      Assuming parameters other than max cond dens are set in the mod file...

        insert Kdr_nmodl  { gmax_Kdr_nmodl = 0.6 }  
    }

    forsec all { 
//      Assuming parameters other than max cond dens are set in the mod file...

        insert CaP_nmodl  { gmax_CaP_nmodl = 0.0045 }  
    }

    forsec all { 
//      Assuming parameters other than max cond dens are set in the mod file...

        insert K2_nmodl  { gmax_K2_nmodl = 3.9E-4 }  
    }

    forsec all { 
//      Assuming parameters other than max cond dens are set in the mod file...

        insert NaF_nmodl  { gmax_NaF_nmodl = 7.5 }  
    }

    forsec soma_group { 
//      Assuming parameters other than max cond dens are set in the mod file...

        insert Kh2_nmodl  { gmax_Kh2_nmodl = 3.0E-4 }  
    }

    forsec soma_group { 
//      Assuming parameters other than max cond dens are set in the mod file...

        insert Kh1_nmodl  { gmax_Kh1_nmodl = 3.0E-4 }  
    }

    forsec soma_group { 
//      Assuming parameters other than max cond dens are set in the mod file...

        insert LeakConductance  { gmax_LeakConductance = 1.0E-4 }  
//      Ion non_specific is used in this mechanism...


    }

    forsec soma_group { 
//      Assuming parameters other than max cond dens are set in the mod file...

        insert KA_nmodl  { gmax_KA_nmodl = 0.015 }  
    }

}

proc geom_nseg() {
    // All sections not mentioned here have nseg = 1

}


proc position() { local i
    forsec all {
        for i = 0, n3d()-1 {
            pt3dchange(i, $1+x3d(i), $2+y3d(i), $3+z3d(i), diam3d(i))
        }
    }
    x = $1  y = $2  z = $3
}

proc connect2target() {   //$o1 target point process, $o2 returned NetCon


//  Using standard NetBuilder form. (Overly) simple assumption that first soma seg is trigger for AP...
//  Note: neuroConstruct does not use this func for creating connections (in serial mode!), but it can be useful when using generated files in NEURON's NetBuilder

    Soma $o2 = new NetCon(&v(1), $o1)
    print "connect2target called on ", name
}


//  This function is useful when checking what cells (aot sections) have been created. Run allcells() from nCtools.hoc...

proc toString() {
    strdef info
    sprint(info, "Cell ref: %s (%s), at: (%d, %d, %d)", reference, name, x, y, z)
    print info
}


//  This function is useful when checking network connections

proc netInfo() {
    strdef info
    sprint(info, "Cell reference: %s, type: %s", reference, type)
    print "--------  ",info
    print "    There are ", synlist.count(), " connections in ", synlist
    for i=0,synlist.count()-1 {
        print "        Connection from ", synlist.o[i].precell, " to: ", synlist.o[i].postcell
        print "        Pre:   Weight: ", synlist.o[i].weight, ", delay: ", synlist.o[i].delay, ", threshold: ", synlist.o[i].threshold 
        print "        Post:  ", synlist.o[i].syn(), ", gmax: ", synlist.o[i].syn().gmax , ", e: ", synlist.o[i].syn().e , ", rise time: ", synlist.o[i].syn().tau_rise , ", decay time: ", synlist.o[i].syn().tau_decay 
    print " "
    }
    
    
    
    print "--------  "
    print " "
}


endtemplate SomaOnly_origChans_all

